PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  color = 1.0000, 1.0000, 1.0000
  expName = regret_experiment
  exportHTML = manually
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Instructions
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    ImageComponent instructions1
      disabled = True
      image = images/instructions01.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent instructions2
      disabled = True
      image = images/instructions02.png
      size = (0.5, 0.5)
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    KeyboardComponent instructions_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent init_vars
      Code Type = Py
      Begin Experiment:
        import random

        # -------------------
        # Participant-level settings
        # -------------------
        # 0 = No-Regret, 1 = Regret-First-30
        participant_cond = random.choice([0, 1])

        # Randomize prob assignment to LEFT / UP / RIGHT once for this participant
        PROBS = [0.2, 0.5, 0.7]
        random.shuffle(PROBS)
        prob_left, prob_up, prob_right = PROBS

        # State vars
        trial_num = 0      # increments each main trial
        points = 0         # outcome from last trial
        total_points = 0   # cumulative points

        # Put mapping in expInfo so it is saved with the data file header
        expInfo['participant_cond'] = participant_cond
        expInfo['prob_left']  = prob_left
        expInfo['prob_up']    = prob_up
        expInfo['prob_right'] = prob_right
  Routine Fixation
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    TextComponent fixcross
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent jitter_code1
      Code Type = Py
      Begin Routine:
        # Jitter range (seconds)
        fixMin = 0.5
        fixMax = 1.5

        # Uniform jitter
        fixDur = random.uniform(fixMin, fixMax)

        # (optional) tidy precision
        fixDur = round(fixDur, 3)
  Routine Choice
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    ImageComponent tree1_img
      image = images/tree-1.png
      pos = (-300, 0)
      size = 200, 200
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent tree2_img
      image = images/tree-2.png
      size = 200, 200
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent tree3_img
      image = images/tree-3.png
      pos = (300, 0)
      size = 200, 200
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_1
      allowedKeys = 'left', 'right', 'up'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent choice_logic
      Code Type = Py
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      Begin Routine:
        trial_num += 1
        thisExp.addData('trial_num', trial_num)

        # optional: log participant-level constants each trial
        thisExp.addData('participant_cond', participant_cond)
        thisExp.addData('prob_left', prob_left)
        thisExp.addData('prob_up', prob_up)
        thisExp.addData('prob_right', prob_right)
      End Routine:
        # Log decision
        thisExp.addData('trial_num', trial_num)
        thisExp.addData('participant_cond', participant_cond)

        # chosen key + RT
        choice_key = key_resp_1.keys
        choice_rt  = key_resp_1.rt
        thisExp.addData('choice_key', choice_key)
        thisExp.addData('choice_rt', choice_rt)

        # We'll fill in choice_prob & points in Feedback (after outcome known)
    TextComponent pointsText1
      letterHeight = 0.05
      pos = (0.8, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every frame] = $f"Total points: {total_points}"
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    CodeComponent points1_code
      Code Type = Py
      Each Frame:
        pointsText1.text = f"Total points: {total_points}"
  Routine Feedback
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    CodeComponent code_feedback
      Code Type = Py
      Before Experiment:
        apple_pos = (0, 0)
        apple_img = 'images/apple-neg.png'
        points = 0
        total_points = 0
        tree_prob = 0.0
        import random
      Begin Routine:
        # Which key was chosen on that trial?
        k = choice_key  # from Choice End Routine variable (defined above)
        # (if you prefer, use: k = getattr(key_resp_1, 'keys', None))

        # Map key to prob + apple position
        if k == 'left':
            apple_pos = (-300, 0)
            tree_prob = prob_left
        elif k == 'up':
            apple_pos = (0, 0)
            tree_prob = prob_up
        elif k == 'right':
            apple_pos = (300, 0)
            tree_prob = prob_right
        else:
            apple_pos = (0, 0)
            tree_prob = 0.0  # no response / unexpected key

        # Outcome
        if random.random() < float(tree_prob):
            apple_img = 'images/apple-high.png'
            points = 1
        else:
            apple_img = 'images/apple-neg.png'
            points = 0

        # Update display stim
        appleImage.setPos(apple_pos)
        appleImage.setImage(apple_img)

        # Log prob + outcome
        thisExp.addData('choice_prob', tree_prob)
        thisExp.addData('points', points)

        # Also helpful to repeat mapping (participant-level constants) each row
        thisExp.addData('prob_left', prob_left)
        thisExp.addData('prob_up', prob_up)
        thisExp.addData('prob_right', prob_right)
      End Routine:
        total_points += points
    ImageComponent appleImage
      image [set every repeat] = $apple_img
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
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    TextComponent pointsText2
      letterHeight = 0.05
      pos = (0.8, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every frame] = $f"Total points: {total_points}"
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    CodeComponent points2_code
      Code Type = Py
      Each Frame:
        pointsText2.text = f"Total points: {total_points}"
  Routine RegretRating
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    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = How much do you regret this choice? Press a number key from 1-9.
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    ImageComponent regret_scale
      color = black
      image = RegretRatingScale (1).png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent regret_key
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8', '9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent regretlogic
      Code Type = Py
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      Begin Experiment:
        skip_regret = False
      Begin Routine:
        # Show regret question only if:
        # participant_cond == 1 (Regret-First-30) AND
        # trial_num <= 30 AND
        # points == 0 (just lost)
        skip_regret = not (participant_cond == 1 and trial_num <= 30 and points == 0)
        if skip_regret:
            continueRoutine = False
            # We'll pre-log NA so each trial row has something
            thisExp.addData('regret_rating', 'NA')
            thisExp.addData('regret_rt', 'NA')
      End Routine:
        if not skip_regret:
            k = regret_key.keys
            if k in (None, ''):
                rating = 'NA'
            elif k == '0':
                rating = 10
            else:
                rating = int(k)
            thisExp.addData('regret_rating', rating)
            thisExp.addData('regret_rt', regret_key.rt)
    TextComponent pointsText3
      letterHeight = 0.05
      pos = (0.8, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every frame] = $f"Total points: {total_points}"
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    CodeComponent points3_code
      Code Type = Py
      Each Frame:
        pointsText3.text = f"Total points: {total_points}"
  Routine ITI
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    TextComponent blank_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent jitter_code2
      Code Type = Py
      Begin Routine:
        # Jitter range (seconds)
        fixMin = 0.5
        fixMax = 1.5

        # Uniform jitter
        fixDur = random.uniform(fixMin, fixMax)

        # (optional) tidy precision
        fixDur = round(fixDur, 3)
  Routine EndScreen
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    CodeComponent end_experiment
      Code Type = Py
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      Begin Experiment:
        import numpy as np

        # Example structure for trials data if needed for context:
        # trials = {
        #     "data": {
        #         "regret_rating": [1, 2, "NA", 4],
        #         "points": [10, 20, 30, 40]
        #     }
        # }

        # Extract regret ratings, ignoring "NA" entries
        regret_ratings = [
            r
            for r in trials["data"]["regret_rating"]
            if r != "NA"
        ]

        # Convert ratings to float or int (if needed)
        regret_ratings = [float(r) for r in regret_ratings]

        if regret_ratings:
            avg_regret = round(np.mean(regret_ratings), 2)
        else:
            avg_regret = "N/A"

        total_points = np.sum(trials["data"]["points"])
      Begin Routine:
        import numpy as np

        # Try to get columns from the trials loop if available
        try:
            ratings = trials.data.get('regret_rating', [])
        except Exception:
            # fallback to experiment-wide data (if loop object unavailable)
            ratings = thisExp.data.get('regret_rating', [])

        # clean & convert
        ratings_clean = []
        for r in ratings:
            if r not in ('NA', '', None):
                try:
                    ratings_clean.append(float(r))
                except Exception:
                    pass
        avg_regret = round(np.mean(ratings_clean), 2) if ratings_clean else 'N/A'

        # points
        try:
            pts = trials.data.get('points', [])
        except Exception:
            pts = thisExp.data.get('points', [])
        pts_clean = []
        for p in pts:
            if p not in ('', None):
                try:
                    pts_clean.append(float(p))
                except Exception:
                    pass
        total_points = int(np.sum(pts_clean)) if pts_clean else 0

        # store so they end up in the output row
        thisExp.addData('avg_regret', avg_regret)
        thisExp.addData('total_points', total_points)
    TextComponent end_display
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        $f"Thanks for participating!\nYou earned {total_points} points."
Flow
  LoopInitiator instructions loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'instruction_img': 'images/instruction01.png'},
      {'instruction_img': 'images/instruction02.png'},
      {'instruction_img': 'images/instruction03.png'},
      {'instruction_img': 'images/instruction04.png'}]
    Routine Instructions
  LoopTerminator instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    conditions:
      [{'tree1_img': 'images/tree1.png', 'tree2_img': 'images/tree2.png', 'tree3_img': 'images/tree3.png', 'tree1_prob': 0.8, 'tree2_prob': 0.5, 'tree3_prob': 0.2, 'condition': 1},
      {'tree1_img': 'images/tree1.png', 'tree2_img': 'images/tree2.png', 'tree3_img': 'images/tree3.png', 'tree1_prob': 0.2, 'tree2_prob': 0.5, 'tree3_prob': 0.8, 'condition': 2},
      {'tree1_img': 'images/tree1.png', 'tree2_img': 'images/tree2.png', 'tree3_img': 'images/tree3.png', 'tree1_prob': 0.6, 'tree2_prob': 0.6, 'tree3_prob': 0.6, 'condition': 3},
      {'tree1_img': 'images/tree1.png', 'tree2_img': 'images/tree2.png', 'tree3_img': 'images/tree3.png', 'tree1_prob': 0.9, 'tree2_prob': 0.1, 'tree3_prob': 0.1, 'condition': 4}]
    Routine Fixation
    Routine Choice
    Routine Feedback
    Routine RegretRating
    Routine ITI
  LoopTerminator trials
  Routine EndScreen
